<?xml version="1.0"?>
<ReactionScheme>
<!--this part should be identical for all reaction files-->
    <!-- IP3R Model based on Fraiman D, Dawson SP (2004) A model of IP3 receptor with a luminal
       calcium binding site: stochastic simulations and analysis. Cell
       Calcium 35: 403-413, 2004 -->
  
  <!-- Receptor States:
       IP3R  state
       IP3RO  state
       IP3RIP3  bound IP3R
       IP3RC  bound IP3R
       IP3RC2
       IP3RC3
       IP3RC4
       
  -->
  <!-- you can specify the units of the diffusion constant. If they are not specified they are assumed to be micron^2/second, (microns written "mu" here) it should understand microns, mm, and m for distances and seconds and ms for times -->
  <!-- This code is implemented CaMKII_bimols Rns -0.44, 0.28, 0.088. Fix 3 products 2rxns break down to 2nd order rxn : LbARG/IP35P1P2 -->
  <!-- last rxn of IP35p1p2 was wrong reactant:fixed on Aug,8th,2008
   Chosen katp=1 sec(not 10 sec) is enough   -->
  <!-- Suggested by avrama Ca kdiff=600 for helping fast decay on Feb.24th 2009-->

  <!--TODO add bAR desensitization!-->
  <Specie name="Ca" id="Ca" kdiff="100" kdiffunit="mu2/s" />
  <Specie name="CaER" id="CaER" kdiff="10." kdiffunit="mu2/s"/>
  
  <Specie name="IP3R"          id="IP3R"          kdiff="0"     kdiffunit="mu2/s"/>
  <Specie name="IP3RIP3"          id="IP3RIP3"          kdiff="0"     kdiffunit="mu2/s"/>
  <Specie name="IP3RO"           id="IP3RO"           kdiff="0"     kdiffunit="mu2/s"/>
  <Specie name="IP3RC"           id="IP3RC"           kdiff="0"     kdiffunit="mu2/s"/>
  <Specie name="IP3RC2"                  id="IP3RC2"           kdiff="0"     kdiffunit="mu2/s"/>
  <Specie name="IP3RC3"                  id="IP3RC3"           kdiff="0"     kdiffunit="mu2/s"/>

  <Specie name="IP3RC4"          id="IP3RC4"          kdiff="0"     kdiffunit="mu2/s"/>
  <Specie name="IP3"            id="IP3"           kdiff="220." kdiffunit="mu2/s"/>
 
  <Reaction name = "IP3R+IP3" id="IP3R+IP3">
    <Reactant specieID="IP3R"           />
    <Reactant specieID="IP3"              />
    <Product  specieID="IP3RIP3"               />

    <forwardRate> 0.00001   </forwardRate>
    <reverseRate> 0.01       </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

  <Reaction name = "IP3RIP3+Ca" id="IP3RIP3+Ca">
    <Reactant specieID="IP3RIP3"           />
    <Reactant specieID="Ca"           />
    <Product  specieID="IP3RO"               />
    
    <forwardRate> 0.00008   </forwardRate>
    <reverseRate> .02    </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

   <Reaction name = "IP3R+Ca" id="IP3R+Ca">                                                                      
    <Reactant specieID="IP3R"           />                                                                      
    <Reactant specieID="Ca"              />                                                                     
    <Product  specieID="IP3RC"               />                                                                 
                                                                                                                
    <forwardRate> 2.22e-6  </forwardRate>                                                                       
    <reverseRate> 5e-3      </reverseRate>                                                                      
    <Q10>         0.2           </Q10>                                                                          
  </Reaction>                                                                                                   
                                                                                                                
  <!--4. IP3R_Pa <-> IP3R_Pb -->
  <Reaction name = "IP3RC+Ca" id="IP3C+Ca">
  <Reactant specieID="IP3RC"           />
      <Reactant specieID="Ca"              />

    <Product  specieID="IP3RC2"               />

    <forwardRate> 4.44e-6   </forwardRate>
    <reverseRate> 10e-3       </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

  <Reaction name = "IP3RC2+Ca" id="IP3C2+Ca">
    <Reactant specieID="IP3RC2"           />
    <Reactant specieID="Ca"              />
    
    <Product  specieID="IP3RC3"               />
    
    <forwardRate> 6.66e-6   </forwardRate>
    <reverseRate> 15e-3       </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>
  <Reaction name = "IP3RC3+Ca" id="IP3C3+Ca">
    <Reactant specieID="IP3RC3"           />
    <Reactant specieID="Ca"              />
    
    <Product  specieID="IP3RC4"               />
    
    <forwardRate> 8.88e-6   </forwardRate>
    <reverseRate> 20e-3       </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>
  
 
<!--     Hong Qi, Linxi Li & Jianwei Shuai 2015 gives 0.5e-3
Breit et al 2018 has RyR permeability 30 x higher than IP3RO
-->
   <Reaction name = "IP3R_Ob-flux_Ia" id="IP3R_Ob-fluxa">
    <Reactant specieID="IP3RO"           />
    <Reactant specieID="CaER"           />
    <Product  specieID="IP3RO"               />
    <Product  specieID="Ca"               />

    <forwardRate> 1.667e-5 </forwardRate>
    <reverseRate>  4.1675e-06    </reverseRate>
    <Q10>   0.2   </Q10>
   </Reaction>
    

 </ReactionScheme>
