<?xml version="1.0"?>
<ReactionScheme>
  <Specie name="Ca" id="Ca" kdiff="100" kdiffunit="mu2/s" />
  <Specie name="CaER" id="CaER" kdiff="10." kdiffunit="mu2/s"/>
  <Specie name="RyR"            id="RyR"           kdiff="0" kdiffunit="mu2/s"/>
  
  <Specie name="RyRCaM"            id="RyRCaM"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2CaM"            id="RyR2CaM"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR3CaM"            id="RyR3CaM"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR4CaM"            id="RyR4CaM"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyRCaMCa2"            id="RyRCaMCa2"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2CaMCa2"            id="RyR2CaMCa2"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR3CaMCa2"            id="RyR3CaMCa2"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR4CaMCa2"            id="RyR4CaMCa2"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2CaMCa4"            id="RyR2CaMCa4"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR3CaMCa4"            id="RyR3CaMCa4"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR4CaMCa4"            id="RyR4CaMCa4"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR3CaMCa6"            id="RyR3CaMCa6"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR4CaMCa6"            id="RyR4CaMCa6"           kdiff="0" kdiffunit="mu2/s"/>
  
  <Specie name="RyR4CaMCCa8"            id="RyR4CaMCCa8"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR4CaMCa16"            id="RyR4CaMCa16"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4RyR4CaMCCa8"            id="Ca4RyR4CaMCCa8"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4RyR4CaMCa16"            id="Ca4RyR4CaMCa16"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyRO1"            id="RyRO1"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyRO2"            id="RyRO2"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca8RyR4CaMCa16clamped"            id="Ca8RyR4CaMCa16clamped"           kdiff="0" kdiffunit="mu2/s"/>
    <Specie name="CaM" id="CaM" kdiff="4" kdiffunit="mu2/s" />
  <!--Calmodulin-->
  <Specie name="CaMCa2C" id="CaMCa2C" kdiff="4" kdiffunit="mu2/s" />
  <Specie name="CaMCa2N" id="CaMCa2N" kdiff="4" kdiffunit="mu2/s" />
  <!-- 2 Ca bound Calmodulin-->
  <Specie name="CaMCa4" id="CaMCa4" kdiff="4" kdiffunit="mu2/s" />
  
<!--Merging a stochastic model by  Keizer and Smith with CaM inhibition. We know that RyR2 has a much higher affinity for Apo-CaM than anything else and that ApoCaM inhibits RyR2 in very low cytosolic Ca  -->
<Reaction name = "RyRCaM2BD" id="RyRCaM2BD">
  <Reactant specieID="RyR"/>
  <Reactant specieID="CaM"/>
  <Product specieID="RyRCaM"/>
  <forwardRate>6.66e-3</forwardRate>
  <reverseRate>4.8e-03</reverseRate>
</Reaction>

<Reaction name = "RyRCaM2BD2" id="RyRCaM2BD2">
  <Reactant specieID="RyRCaM"/>
  <Reactant specieID="CaM" />
  <Product specieID="RyR2CaM"/>
  <forwardRate>6.66e-3</forwardRate>
  <reverseRate>4.8e-03</reverseRate>
</Reaction>

<Reaction name = "RyRCaM2BD3" id="RyRCaMBD3">
  <Reactant specieID="RyR2CaM"/>
  <Reactant specieID="CaM" />
  <Product specieID="RyR3CaM"/>
  <forwardRate>6.66e-3</forwardRate>
  <reverseRate>4.8e-03</reverseRate>
</Reaction>

<Reaction name = "RyRCaM2BD4" id="RyRCaMBD4">
  <Reactant specieID="RyR3CaM"/>
  <Reactant specieID="CaM" />
  <Product specieID="RyR4CaM"/>
  <forwardRate>6.66e-3</forwardRate>
  <reverseRate>4.8e-03</reverseRate>
</Reaction>

<Reaction name = "RyRCaMCCa22BD1" id="RyRCaMCCa22BD1">
  <Reactant specieID="RyRCaM"/>
  <Reactant  specieID="Ca" power="2"/>
  <Product specieID="RyRCaMCa2"/> 
  <forwardRate>1e-7</forwardRate>
  <reverseRate>1e-2</reverseRate>
 </Reaction>

 <Reaction name = "RyR2CaMCCa22BD1" id="RyR2CaMCCa22BD1">
  <Reactant specieID="RyR2CaM"/>
  <Reactant  specieID="Ca" power="2"/>
  <Product specieID="RyR2CaMCa2"/> 
  <forwardRate>1e-7</forwardRate>
  <reverseRate>1e-2</reverseRate>
 </Reaction>

 <Reaction name = "RyR3CaMCCa2BD1" id="RyR3CaMCCa22BD1">
  <Reactant specieID="RyR3CaM"/>
  <Reactant  specieID="Ca" power="2"/>
  <Product specieID="RyR3CaMCa2"/> 
  <forwardRate>1e-7</forwardRate>
  <reverseRate>1e-2</reverseRate>
 </Reaction>

 <Reaction name = "RyR4CaMCCa2BD1" id="RyR4CaMCCa22BD1">
  <Reactant specieID="RyR4CaM"/>
  <Reactant  specieID="Ca" power="2"/>
  <Product specieID="RyR4CaMCa2"/> 
  <forwardRate>1e-7</forwardRate>
  <reverseRate>1e-2</reverseRate>
 </Reaction>

 <Reaction name = "RyR2CaMCCa22BD2" id="RyR2CaMCCa22BD2">
  <Reactant specieID="RyR2CaMCa2"/>
  <Reactant  specieID="Ca" power="2"/>
  <Product specieID="RyR2CaMCa4"/> 
  <forwardRate>1e-7</forwardRate>
  <reverseRate>1e-2</reverseRate>
 </Reaction>

 <Reaction name = "RyR3CaMCCa2BD2" id="RyR3CaMCCa22BD2">
  <Reactant specieID="RyR3CaMCa2"/>
  <Reactant specieID="Ca" power="2"/>
  <Product specieID="RyR3CaMCa4"/> 
  <forwardRate>1e-7</forwardRate>
  <reverseRate>1e-2</reverseRate>
 </Reaction>

 <Reaction name = "RyR4CaMCCa2BD2" id="RyR4CaMCCa22BD2">
  <Reactant specieID="RyR4CaMCa2"/>
  <Reactant specieID="Ca" power="2"/>
  <Product specieID="RyR4CaMCa4"/> 
  <forwardRate>1e-7</forwardRate>
  <reverseRate>1e-2</reverseRate>
 </Reaction>

  <Reaction name = "RyR3CaMCCa2BD3" id="RyR3CaMCCa22BD3">
  <Reactant specieID="RyR3CaMCa4"/>
  <Reactant specieID="Ca" power="2"/>
  <Product specieID="RyR3CaMCa6"/> 
  <forwardRate>1e-7</forwardRate>
  <reverseRate>1e-2</reverseRate>
 </Reaction>

 <Reaction name = "RyR4CaMCCa2BD3" id="RyR4CaMCCa22BD3">
  <Reactant specieID="RyR4CaMCa4"/>
  <Reactant specieID="Ca" power="2"/>
  <Product specieID="RyR4CaMCa6"/> 
  <forwardRate>1e-7</forwardRate>
  <reverseRate>1e-2</reverseRate>
 </Reaction>

 <Reaction name = "RyR4CaMCCa2BD4" id="RyR4CaMCCa22BD4">
  <Reactant specieID="RyR4CaMCa6"/>
  <Reactant specieID="Ca" power="2"/>
  <Product specieID="RyR4CaMCCa8"/> 
  <forwardRate>1e-7</forwardRate>
  <reverseRate>1e-2</reverseRate>
 </Reaction>


 
 <Reaction name = "RyR4CaMCCa822BD" id="RyR4CaMCCa82BD">
  <Reactant specieID="RyR4CaMCCa8"/>
  <Reactant specieID="Ca" power="8"/>
  <Product specieID="RyR4CaMCa16"/> 
  <forwardRate>1e-16</forwardRate>
  <reverseRate>1</reverseRate>
 </Reaction>

 

  <Reaction name = "RyRe" id="RyRe"> 
    <Reactant specieID="RyR4CaMCCa8"/>
    <Reactant specieID="Ca" power="4"/>
    <Product specieID="Ca4RyR4CaMCCa8"/>
    <forwardRate>5e-11</forwardRate>
    <reverseRate>50e-3</reverseRate>
  </Reaction>

  <Reaction name = "RyRe1" id="RyRe1"> 
    <Reactant specieID="RyR4CaMCa16"/>
    <Reactant specieID="Ca" power="4"/>
    <Product specieID="Ca4RyR4CaMCa16"/>
    <forwardRate>5e-11</forwardRate>
    <reverseRate>50e-3</reverseRate>
 </Reaction>

  <Reaction name = "RyRa" id="RyRa">
    <Reactant specieID="RyR4CaMCCa8"/>
    <Reactant specieID="Ca" power="4"/>
    <Product specieID="RyRO1"/>
    <forwardRate>5e-11</forwardRate>
    <reverseRate>50e-3</reverseRate>
 </Reaction>
   
  <Reaction name = "RyRa1" id="RyRa1">
    <Reactant specieID="Ca4RyR4CaMCa16"/>
    <Reactant specieID="Ca" power="4"/>
    <Product specieID="RyRO2"/>
    <forwardRate>5e-11</forwardRate>
    <reverseRate>1.3</reverseRate>
  </Reaction>
  
  <Reaction name = "RyRb" id="RyRb">
    <Reactant specieID="RyRO1"/>
    <Reactant specieID="Ca" power="8"/>
    <Product specieID="RyRO2" />
    <forwardRate>1e-16</forwardRate>
    <reverseRate>1</reverseRate>
  </Reaction>

  <Reaction name = "RyRclamp" id="RyRclamo">
    <Reactant specieID="RyRO2"/>
    <Product specieID="Ca8RyR4CaMCa16clamped" />
    <forwardRate>1e-7</forwardRate>
    <reverseRate>1e-4</reverseRate>
  </Reaction>



  <!--Sobie et al. 2002 (Saleet Jafri's) states 4/ms, Keizer and Levine 5/ms for small ER-->
   <Reaction name = "RyRflux1" id="RyRflux1">
     <Reactant specieID="RyRO1"/>
     <Reactant specieID="CaER"/>
     <Product specieID="RyRO1"/>
     <Product specieID="Ca"/>
    <forwardRate>5e-3</forwardRate>
    <reverseRate>5e-3</reverseRate>
  </Reaction>
  <Reaction name = "RyRflux2" id="RyRflux2">
     <Reactant specieID="RyRO2"/>
     <Reactant specieID="CaER"/>
     <Product specieID="RyRO2"/>
     <Product specieID="Ca"/>
    <forwardRate>5e-3</forwardRate>
    <reverseRate>5e-3</reverseRate>
  </Reaction>


 <!-- CaM, CaMCa4 and PP2B Binding -->
  <!--1) CaM  + 2Ca
      <-> CaMCa2 -->
  <!--This is the C site-->
  <Reaction name="CaMC_bind" id="CaMC_bind">
    <Reactant specieID="CaM" />
    <Reactant specieID="Ca" n="2" />
    <Product specieID="CaMCa2C" />
    <forwardRate>6e-6</forwardRate>
    <reverseRate>9.1e-3</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
  <!--2) CaMCa2  + 2Ca
      <-> CaMCa4 -->
  <!--This is the N-site-->
  <Reaction name="CaMCa2C_bind" id="CaMCa2C_bind">
    <Reactant specieID="CaMCa2C" />
    <Reactant specieID="Ca" n="2" />
    <Product specieID="CaMCa4" />
    <forwardRate>0.1e-3</forwardRate>
    <reverseRate>1000e-3</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
  <!--1B) CaM  + 2Ca <-> CaMCa2N GQ RXN FILE, C or N can bind first-->
  <Reaction name = "CaMN_bind" id="CaMN_bind">
    <Reactant specieID="CaM"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="CaMCa2N"/>
    
    <forwardRate>0.1e-3</forwardRate>
    <reverseRate>1000e-3</reverseRate>
    
  </Reaction>

  <!--2B) CaMCa2N  + 2Ca <-> CaMCa4 GQ RXN FILE, C or N can bind first-->
  <Reaction name = "CaMCa2N_bind" id="CaMCa2N_bind">
    <Reactant specieID="CaMCa2N"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="CaMCa4"/>
    
    <forwardRate>6e-6</forwardRate>
    <reverseRate>9.1e-3</reverseRate>
    
  </Reaction>


</ReactionScheme>
