<?xml version="1.0"?>
<ReactionScheme>
  <Specie name="Ca" id="Ca" kdiff="100" kdiffunit="mu2/s" />
  <Specie name="CaER" id="CaER" kdiff="10." kdiffunit="mu2/s"/>
  <Specie name="RyR" id="RyR" kdiff="0." kdiffunit="mu2/s"/>
  <Specie name="RyRC1"            id="RyRC1"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyRC2"            id="RyRC2"           kdiff="0" kdiffunit="mu2/s"/>

  <Specie name="RyRC3"            id="RyRC3"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyRC4"            id="RyRC4"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyRC5"            id="RyRC5"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyRI"            id="RyRI"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyRO1"            id="RyRO1"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyRO2"            id="RyRO2"           kdiff="0" kdiffunit="mu2/s"/>
 
  
 <Reaction name = "RyRa1" id="RyRa1">
    <Reactant specieID="RyR"/>
    <Reactant specieID="Ca"/>
    <Product specieID="RyRC1"/>
    <forwardRate>0.002848</forwardRate>
    <reverseRate>3</reverseRate>
 </Reaction>
 <Reaction name = "RyRa2" id="RyRa2">
    <Reactant specieID="RyRC1"/>
    <Reactant specieID="Ca"/>
    <Product specieID="RyRC2"/>
    <forwardRate>0.002136</forwardRate>
    <reverseRate>6</reverseRate>
 </Reaction>
 
 <Reaction name = "RyRa3" id="RyRa3">
    <Reactant specieID="RyRC2"/>
    <Reactant specieID="Ca"/>
    <Product specieID="RyRC3"/>
    <forwardRate>0.001424</forwardRate>
    <reverseRate>9</reverseRate>
 </Reaction>
 <Reaction name = "RyRa4" id="RyRa4">
    <Reactant specieID="RyRC3"/>
    <Reactant specieID="Ca"/>
    <Product specieID="RyRC4"/>
    <forwardRate>0.000712</forwardRate>
    <reverseRate>12</reverseRate>
 </Reaction>
 
 <Reaction name = "RyRC4O1" id="RyRC4O1">
    <Reactant specieID="RyRC4"/>
    <Product specieID="RyRO1"/>
    <forwardRate>10</forwardRate>
    <reverseRate>0.5</reverseRate>
 </Reaction>
 
 <Reaction name = "RyRC4O2" id="RyRC4O2">
    <Reactant specieID="RyRC4"/>
    <Product specieID="RyRO2" />
    <forwardRate>1e-3</forwardRate>
    <reverseRate>0.5e-3</reverseRate>
  </Reaction>

  <Reaction name = "RyRO1C5" id="RyRO1C5">
    <Reactant specieID="RyRO1"/>
    <Product specieID="RyRC5"/>
    <forwardRate>2e-3</forwardRate>
    <reverseRate>0.66666e-3</reverseRate>
  </Reaction>
  <Reaction name = "RyRO2C5" id="RyRO2C5">
    <Reactant specieID="RyRO2"/>
    <Product specieID="RyRC5"/>
    <forwardRate>3000e-3</forwardRate>
    <reverseRate>100e-3</reverseRate>
  </Reaction>

  <Reaction name = "RyRC5I" id="RyRC5I">
    <Reactant specieID="RyRC5"/>
    <Product specieID="RyRI"/>
    <forwardRate>0.5e-3</forwardRate>
    <reverseRate>1.5e-3</reverseRate>
  </Reaction>


  <!--Sobie et al. 2002 (Saleet Jafri's) states 4/ms, Keizer and Levine 5/ms for small ER-->
  <!--  <Reaction name = "RyRflux1" id="RyRflux1"> -->
  <!--    <Reactant specieID="RyRO1"/> -->
  <!--    <Reactant specieID="CaER"/> -->
  <!--    <Product specieID="RyRO1"/> -->
  <!--    <Product specieID="Ca"/> -->
  <!--   <forwardRate>5e-3</forwardRate> -->
  <!--   <reverseRate>5e-3</reverseRate> -->
  <!-- </Reaction> -->
  <!-- <Reaction name = "RyRflux2" id="RyRflux2"> -->
  <!--    <Reactant specieID="RyRO2"/> -->
  <!--    <Reactant specieID="CaER"/> -->
  <!--    <Product specieID="RyRO2"/> -->
  <!--    <Product specieID="Ca"/> -->
  <!--   <forwardRate>5e-3</forwardRate> -->
  <!--   <reverseRate>5e-3</reverseRate> -->
  <!-- </Reaction> -->
    
</ReactionScheme>
