<?xml version="1.0"?>
<ReactionScheme>
  <Specie name="Ca" id="Ca" kdiff="100" kdiffunit="mu2/s" />
  <Specie name="CaER" id="CaER" kdiff="10." kdiffunit="mu2/s"/>
  <Specie name="RyRC1"            id="RyRC1"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyRC2"            id="RyRC2"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyRO1"            id="RyRO1"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyRO2"            id="RyRO2"           kdiff="0" kdiffunit="mu2/s"/>
 
  
 <Reaction name = "RyRa" id="RyRa">
    <Reactant specieID="RyRC1"/>
    <Reactant specieID="Ca" power="4"/>
    <Product specieID="RyRO1"/>
    <forwardRate>1.5e-12</forwardRate>
    <reverseRate>28.8e-3</reverseRate>
 </Reaction>
   

  <Reaction name = "RyRC4O2" id="RyRC4O2">
    <Reactant specieID="RyRO1"/>
    <Reactant specieID="Ca" power="3"/>
    <Product specieID="RyRO2" />
    <forwardRate>1.5e-9</forwardRate>
    <reverseRate>385.9e-3</reverseRate>
  </Reaction>

  <Reaction name = "RyRO1C5" id="RyRO1C5">
    <Reactant specieID="RyRO1"/>
    <Product specieID="RyRC2"/>
    <forwardRate>1.75e-3</forwardRate>
    <reverseRate>0.1e-3</reverseRate>
  </Reaction>


  <!--Sobie et al. 2002 (Saleet Jafri's) states 4/ms, Keizer and Levine 5/ms for small ER-->
   <Reaction name = "RyRflux1" id="RyRflux1">
     <Reactant specieID="RyRO1"/>
     <Reactant specieID="CaER"/>
     <Product specieID="RyRO1"/>
     <Product specieID="Ca"/>
    <forwardRate>5e-3</forwardRate>
    <reverseRate>5e-3</reverseRate>
  </Reaction>
  <Reaction name = "RyRflux2" id="RyRflux2">
     <Reactant specieID="RyRO2"/>
     <Reactant specieID="CaER"/>
     <Product specieID="RyRO2"/>
     <Product specieID="Ca"/>
    <forwardRate>5e-3</forwardRate>
    <reverseRate>5e-3</reverseRate>
  </Reaction>
    
</ReactionScheme>
