<?xml version="1.0"?>
<!--https://doi.org/10.1085/jgp.110.4.415 -->
<ReactionScheme>
  <Specie name="Ca" id="Ca" kdiff="100" kdiffunit="mu2/s" />
  <Specie name="CaER" id="CaER" kdiff="10." kdiffunit="mu2/s"/>
  <Specie name="RyR"            id="RyR"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyRC"            id="RyRC"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyRO"            id="RyRO"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyRI"            id="RyRI"           kdiff="0" kdiffunit="mu2/s"/>
 
  <!-- RyR is RyRCI-->
 <Reaction name = "RyRa" id="RyRa">
    <Reactant specieID="RyRC"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyRO"/>
    <forwardRate>1e-9</forwardRate>
    <reverseRate>1e-3</reverseRate>
 </Reaction>
   

  <Reaction name = "RyRb" id="RyRb">
    <Reactant specieID="RyRC"/>
    <Reactant specieID="Ca" />
    <Product specieID="RyR" />
    <forwardRate>2e-6</forwardRate>
    <reverseRate>2e-3</reverseRate>
  </Reaction>

  <Reaction name = "RyRc" id="RyRc">
    <Reactant specieID="RyR"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyRI"/>
      <forwardRate>1e-9</forwardRate>
    <reverseRate>1e-3</reverseRate>
  </Reaction>

  <Reaction name = "RyRd" id="RyRd">
    <Reactant specieID="RyRO"/>
    <Reactant specieID="Ca" />
    <Product specieID="RyRI" />
    <forwardRate>2e-6</forwardRate>
    <reverseRate>2e-3</reverseRate>
  </Reaction>
  
  <!--Sobie et al. 2002 (Saleet Jafri's) states 4/ms, Keizer and Levine 5/ms for small ER-->
   <Reaction name = "RyRflux1" id="RyRflux1">
     <Reactant specieID="RyRO"/>
     <Reactant specieID="CaER"/>
     <Product specieID="RyRO"/>
     <Product specieID="Ca"/>
    <forwardRate>5e-3</forwardRate>
    <reverseRate>5e-3</reverseRate>
  </Reaction>
</ReactionScheme>
