<?xml version="1.0"?>
<ReactionScheme>
<!--this part should be identical for all reaction files-->
    <!-- IP3R Model based on Fraiman D, Dawson SP (2004) A model of IP3 receptor with a luminal
       calcium binding site: stochastic simulations and analysis. Cell
       Calcium 35: 403-413, 2004 -->
  
  <!-- Receptor States:
       IP3R  state
       IP3RO  state
       IP3RIP3  bound IP3R
       IP3RC  bound IP3R
       IP3RC2
       IP3RC3
       IP3RC4
       
  -->
  <!-- you can specify the units of the diffusion constant. If they are not specified they are assumed to be micron^2/second, (microns written "mu" here) it should understand microns, mm, and m for distances and seconds and ms for times -->
  <!-- This code is implemented CaMKII_bimols Rns -0.44, 0.28, 0.088. Fix 3 products 2rxns break down to 2nd order rxn : LbARG/IP35P1P2 -->
  <!-- last rxn of IP35p1p2 was wrong reactant:fixed on Aug,8th,2008
   Chosen katp=1 sec(not 10 sec) is enough   -->
  <!-- Suggested by avrama Ca kdiff=600 for helping fast decay on Feb.24th 2009-->

  <!--TODO add bAR desensitization!-->
  <Specie name="Ca" id="Ca" kdiff="174.3" kdiffunit="mu2/s" />
  <Specie name="CaER" id="CaER" kdiff="10." kdiffunit="mu2/s"/>
  <Specie name="Cyt_SERCA" id="Cyt_SERCA" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Cyt_SERCA_Ca" id="Cyt_SERCA_Ca" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Cyt_SERCA_Ca2" id="Cyt_SERCA_Ca2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="ER_SERCA_Ca2" id="ER_SERCA_Ca2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="ER_SERCA_Ca" id="ER_SERCA_Ca" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="ER_SERCA" id="ER_SERCA" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="LeakER" id="LeakER" kdiff="0" kdiffunit="mu2/s" />
  <!--calreticulin-->
  <Specie name="CRT" id="CRT" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CRTP" id="CRTP" kdiff="0" kdiffunit="mu2/s"/>
     
  <!-- Serca - modified from Griffiths 2006  and Bartol 2015 to account 
       for higher affinity of SERCA2b for Ca, k_2 (rev rate of Cyt_SERCA_1c)
       adjusted as well-->
  <Reaction name = "Cyt_SERCA_1a" id="Cyt_SERCA_1a">
    <Reactant specieID="Ca" />
    <Reactant specieID="Cyt_SERCA"/>
    <Product specieID="Cyt_SERCA_Ca"/>
    
    <forwardRate>8e-4</forwardRate>
    <reverseRate>83.7e-3</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
 
  <Reaction name = "Cyt_SERCA_1b" id="Cyt_SERCA_1b">
    <Reactant specieID="Ca" />
    <Reactant specieID="Cyt_SERCA_Ca"/>
    <Product specieID="Cyt_SERCA_Ca2"/>
        
    <forwardRate>8e-4</forwardRate>
    <reverseRate>167.4e-3</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>

  <Reaction name = "Cyt_SERCA_1c" id="Cyt_SERCA_1c">
    <Reactant specieID="Cyt_SERCA_Ca2"/>
    <Product specieID="ER_SERCA_Ca2"/>
    <forwardRate>0.6e-3</forwardRate>
    <reverseRate>34e-3</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>

  <Reaction name = "Cyt_SERCA_1d" id="Cyt_SERCA_1d">
    <Reactant specieID="ER_SERCA_Ca2"/>
    <Product specieID="CaER" />
    <Product specieID="ER_SERCA_Ca"/>
    <forwardRate>60.04e-3</forwardRate>
    <reverseRate>1e-7</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>

  <Reaction name = "Cyt_SERCA_1e" id="Cyt_SERCA_1e">
    <Reactant specieID="ER_SERCA_Ca"/>
    <Product specieID="CaER" />
    <Product specieID="ER_SERCA"/>
    <forwardRate>30.02e-3</forwardRate>
    <reverseRate>2e-7</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>

  <Reaction name = "Cyt_SERCA_1f" id="Cyt_SERCA_1f">
    <Reactant specieID="ER_SERCA"/>
    <Product specieID="Cyt_SERCA"/>
    <forwardRate>0.4e-3</forwardRate>
    <reverseRate>1.2e-6</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>


  <!-- higher affinity lower capacity CRT-Ca binding,
       Baksh and Michalak, J Biol Chem 1991-->
  <Reaction name = "CRTP_bind" id="CRTP_bind">
    <Reactant specieID="CRT"/>
    <Reactant specieID="CaER"/>
    <Product specieID="CRTP"/>
    
    <forwardRate>1e-5</forwardRate>
    <reverseRate>0.1</reverseRate>
  </Reaction>

  <Reaction name = "Ca_leakER1" id="Ca_leakaER1">
    <Reactant specieID="CaER"/>
    <Reactant specieID="LeakER" />
    <Product specieID="LeakER"/>
    <Product specieID="Ca" />

    <forwardRate>1.8e-7</forwardRate>
    <reverseRate>1.8e-7</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
</ReactionScheme>
