<?xml version="1.0"?>
<ReactionScheme>
  <Specie name="Ca" id="Ca" kdiff="100" kdiffunit="mu2/s" />
  <Specie name="CaM" id="CaM" kdiff="4." kdiffunit="mu2/s"/>
  <Specie name="RyR"            id="RyR"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyRC1"            id="RyRC1"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyRC2"            id="RyRC2"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyRC3"            id="RyRC3"           kdiff="0" kdiffunit="mu2/s"/>  
  <Specie name="RyRO1"            id="RyRO1"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyRO2"            id="RyRO2"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyRCaM"            id="RyRCaM"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyRCaMC1"            id="RyRCaMC1"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyRCaMC2"            id="RyRCaMC2"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyRCaMC3"            id="RyRCaMC3"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyRCaMC4"            id="RyRCaMC4"           kdiff="0" kdiffunit="mu2/s"/>  
  <Specie name="RyRCaMO1"            id="RyRCaMO1"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyRCaMO2"            id="RyRCaMO2"           kdiff="0" kdiffunit="mu2/s"/>
 

  
<!-- Stochastic model for correct transitions need K=ker/kef= 0.001uM^4
Keizer and Smith --> 
  <Reaction name = "RyRe" id="RyRe">
    <Reactant specieID="RyR"/>
    <Reactant specieID="Ca" power="4"/>
    <Product specieID="RyRC1"/>
    <forwardRate>5e-11</forwardRate>
    <reverseRate>50e-3</reverseRate>
 </Reaction>

  <Reaction name = "RyRa" id="RyRa">
    <Reactant specieID="RyRC1"/>
    <Reactant specieID="Ca" power="4"/>
    <Product specieID="RyRO1"/>
    <forwardRate>5e-10</forwardRate>
    <reverseRate>9600e-3</reverseRate>
 </Reaction>
   

  <Reaction name = "RyRb" id="RyRb">
    <Reactant specieID="RyRO1"/>
    <Reactant specieID="Ca" power="4"/>
    <Product specieID="RyRO2" />
    <forwardRate>5e-11</forwardRate>
    <reverseRate>13</reverseRate>
  </Reaction>

   <Reaction name = "RyRc" id="RyRc">
    <Reactant specieID="RyRC2"/>
    <Reactant specieID="Ca" power="4"/>
    <Product specieID="RyRO2" />
    <forwardRate>3.3333e-15</forwardRate>
    <reverseRate>66.667e-3</reverseRate>
  </Reaction>

  <Reaction name = "RyRd" id="RyRd">
    <Reactant specieID="RyRC1"/>
    <Reactant specieID="Ca" power="4"/>
    <Product specieID="RyRC2" />
    <forwardRate>5000e-15</forwardRate>
    <reverseRate>1.235e-3</reverseRate>
  </Reaction>

  <Reaction name = "RyRf" id="RyRf">
    <Reactant specieID="RyRC2"/>
    <Reactant specieID="Ca" power="4"/>
    <Product specieID="RyRC3"/>
    <forwardRate>1e-14</forwardRate>
    <reverseRate>3</reverseRate>
 </Reaction>


 <Reaction name="RyRbCaM1" id="RyRbCaM1">
    <Reactant specieID="RyR"/>
    <Reactant specieID="CaM" power="4"/>
    <Product specieID="RyRCaM"/>
    <!--10.1161/circresaha.114.302857 20 nM-->
    <forwardRate>1.75e-09</forwardRate>
    <reverseRate>1.5e-05</reverseRate>
 </Reaction>

 <Reaction name="RyRbCaM1" id="RyRbCaM1">
    <Reactant specieID="RyR"/>
    <Reactant specieID="CaM" power="4"/>
    <Product specieID="RyRCaM"/>
    <!--10.1161/circresaha.114.302857 20 nM-->
    <forwardRate>1.75e-09</forwardRate>
    <reverseRate>1.5e-05</reverseRate>
 </Reaction>
 <Reaction name="RyRbCaM2" id="RyRbCaM2">
    <Reactant specieID="RyRC1"/>
    <Reactant specieID="CaM" power="4"/>
    <Product specieID="RyRCaMC1"/>
    <!--10.1161/circresaha.114.302857 20 nM-->
    <forwardRate>1.75e-09</forwardRate>
    <reverseRate>1.5e-05</reverseRate>
  </Reaction>
  <Reaction name="RyRbCaM3" id="RyRbCaM3">
    <Reactant specieID="RyRC2"/>
    <Reactant specieID="CaM" power="4"/>
    <Product specieID="RyRCaMC2"/>
    <!--10.1161/circresaha.114.302857 20 nM-->
    <forwardRate>1.75e-09</forwardRate>
    <reverseRate>1.5e-05</reverseRate>
  </Reaction>
  <Reaction name="RyRbCaM4" id="RyRbCaM4">
    <Reactant specieID="RyRC3"/>
    <Reactant specieID="CaM" power="4"/>
    <Product specieID="RyRCaMC3"/>
    <!--10.1161/circresaha.114.302857 20 nM-->
    <forwardRate>1.75e-09</forwardRate>
    <reverseRate>1.5e-05</reverseRate>
  </Reaction>
  <Reaction name="RyRbCaM5" id="RyRbCaM5">
    <Reactant specieID="RyRO1"/>
    <Reactant specieID="CaM" power="4"/>
    <Product specieID="RyRCaMO1"/>
    <!--10.1161/circresaha.114.302857 20 nM-->
    <forwardRate>1.75e-09</forwardRate>
    <reverseRate>1.5e-05</reverseRate>
 </Reaction>

  <Reaction name="RyRbCaM6" id="RyRbCaM6">
    <Reactant specieID="RyRO2"/>
    <Reactant specieID="CaM" power="4"/>
    <Product specieID="RyRCaMO2"/>
    <!--10.1161/circresaha.114.302857 20 nM-->
    <forwardRate>1.75e-09</forwardRate>
    <reverseRate>1.5e-05</reverseRate>
 </Reaction>


 <Reaction name = "RyRCaMe" id="RyRCaMe">
    <Reactant specieID="RyRCaM"/>
    <Reactant specieID="Ca" power="4"/>
    <Product specieID="RyRCaMC1"/>
    <forwardRate>5e-11</forwardRate>
    <reverseRate>50e-3</reverseRate>
 </Reaction>

  <Reaction name = "RyRCaMa" id="RyRCaMa">
    <Reactant specieID="RyRCaMC1"/>
    <Reactant specieID="Ca" power="4"/>
    <Product specieID="RyRCaMO1"/>
    <forwardRate>5e-10</forwardRate>
    <reverseRate>9600e-3</reverseRate>
  </Reaction>
   

  <Reaction name = "RyRCaMb" id="RyRCaMb">
    <Reactant specieID="RyRCaMO1"/>
    <Reactant specieID="Ca" power="4"/>
    <Product specieID="RyRCaMO2" />
    <forwardRate>5e-11</forwardRate>
    <reverseRate>13</reverseRate>
  </Reaction>

   <Reaction name = "RyRCaMc" id="RyRCaMc">
    <Reactant specieID="RyRCaMC2"/>
    <Reactant specieID="Ca" power="4"/>
    <Product specieID="RyRCaMO2" />
    <forwardRate>3.3333e-15</forwardRate>
    <reverseRate>66.667e-3</reverseRate>
  </Reaction>

  <Reaction name = "RyRCaMd" id="RyRCaMd">
    <Reactant specieID="RyRCaMC1"/>
    <Reactant specieID="Ca" power="4"/>
    <Product specieID="RyRCaMC2" />
    <forwardRate>5000e-15</forwardRate>
    <reverseRate>1.235e-3</reverseRate>
  </Reaction>

  <Reaction name = "RyRCaMf" id="RyRCaMf">
    <Reactant specieID="RyRCaMC2"/>
    <Reactant specieID="Ca" power="4"/>
    <Product specieID="RyRCaMC3"/>
    <forwardRate>1e-14</forwardRate>
    <reverseRate>3</reverseRate>
 </Reaction>

 <Reaction name="RyRCaMOC" id="RyRCaMOC">
    <Reactant specieID="RyRCaMO2"/>
    <Product specieID="RyRCaMC4"/>
    <!--10.1161/circresaha.114.302857 20 nM-->
    <forwardRate>1.e-03</forwardRate>
    <reverseRate>0.5e-03</reverseRate>
 </Reaction>
 
</ReactionScheme>
