<?xml version="1.0"?>
<ReactionScheme>
  <Specie name="Ca" id="Ca" kdiff="100" kdiffunit="mu2/s"/>
  <Specie name="CaM" id="CaM" kdiff="4" kdiffunit="mu2/s"/>
  <Specie name="RyR" id="RyR" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR_2Ca" id="RyR_2Ca" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR_4Ca" id="RyR_4Ca" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR_6Ca" id="RyR_6Ca" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR_8Ca" id="RyR_8Ca" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR_3O" id="RyR_3O" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR_4O" id="RyR_4O" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR_3O_2Ca" id="RyR_3O_2Ca" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR_2O_2Ca" id="RyR_2O_2Ca" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR_2O_4Ca" id="RyR_2O_4Ca" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR_2O" id="RyR_2O" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR_C2" id="RyR_C2" kdiff="0" kdiffunit="mu2/s"/>
  
  <Specie name="RyRCaM" id="RyRCaM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyRCaM_2Ca" id="RyRCaM_2Ca" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyRCaM_4Ca" id="RyRCaM_4Ca" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyRCaM_6Ca" id="RyRCaM_6Ca" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyRCaM_8Ca" id="RyRCaM_8Ca" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyRCaM_3O" id="RyRCaM_3O" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyRCaM_3O_2Ca" id="RyRCaM_3O_2Ca" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyRCaM_2O_2Ca" id="RyRCaM_2O_2Ca" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyRCaM_2O_4Ca" id="RyRCaM_2O_4Ca" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyRCaM_2O" id="RyRCaM_2O" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyRCaM_C2" id="RyRCaM_C2" kdiff="0" kdiffunit="mu2/s"/>
  
  <Reaction name="RyRbCa4" id="RyRbCa4">
    <Reactant specieID="RyR"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyR_2Ca"/>
    <forwardRate>1.2e-07</forwardRate>
    <reverseRate>0.025</reverseRate>
  </Reaction>
  <Reaction name="RyRbCa5" id="RyRbCa5">
    <Reactant specieID="RyR_2Ca"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyR_4Ca"/>
    <forwardRate>1.2e-07</forwardRate>
    <reverseRate>0.025</reverseRate>
  </Reaction>
  <Reaction name="RyRbCa6" id="RyRbCa6">
    <Reactant specieID="RyR_4Ca"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyR_6Ca"/>
    <forwardRate>1.2e-07</forwardRate>
    <reverseRate>0.025</reverseRate>
  </Reaction>
  <Reaction name="RyRbCa7" id="RyRbCa7">
    <Reactant specieID="RyR_6Ca"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyR_8Ca"/>
    <forwardRate>1.2e-07</forwardRate>
    <reverseRate>0.025</reverseRate>
  </Reaction>

  <Reaction name="RyRbCa8" id="RyRbCa8">
    <Reactant specieID="RyR_3O"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyR_3O_2Ca"/>
    <forwardRate>1.2e-07</forwardRate>
    <reverseRate>0.025</reverseRate>
   </Reaction>             

  <Reaction name="RyRbCa1" id="RyRbCa1">
    <Reactant specieID="RyR_4Ca"/>
    <Product specieID="RyR_2O"/>
    <forwardRate>0.01</forwardRate>
    <reverseRate>0.25</reverseRate>
  </Reaction>

  <Reaction name="RyRbCa2" id="RyRbCa8">
    <Reactant specieID="RyR_2O"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyR_2O_2Ca"/>
    <forwardRate>1.2e-07</forwardRate>
    <reverseRate>0.025</reverseRate>
   </Reaction>    

   <Reaction name="RyRbCa14" id="RyRbCa14">
    <Reactant specieID="RyR_2O_2Ca"/>
    <Product specieID="RyR_3O"/>
    <forwardRate>0.1</forwardRate>
    <reverseRate>0.5</reverseRate>
  </Reaction>

  <Reaction name="RyRbCa15" id="RyRbCa15">
    <Reactant specieID="RyR_2O_4Ca"/>
    <Product specieID="RyR_3O_2Ca"/>
    <forwardRate>0.1</forwardRate>
    <reverseRate>0.5</reverseRate>
  </Reaction>

  
   <Reaction name="RyRbCa3" id="RyRbCa3">
    <Reactant specieID="RyR_2O_2Ca"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyR_2O_4Ca"/>
    <forwardRate>1.2e-07</forwardRate>
    <reverseRate>0.025</reverseRate>
   </Reaction>    

   
  <Reaction name="RyRbCa9" id="RyRbCa9">
    <Reactant specieID="RyR_6Ca"/>
    <Product specieID="RyR_3O"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>0.125</reverseRate>
  </Reaction>

  <Reaction name="RyRbCa10" id="RyRbCa10">
    <Reactant specieID="RyR_8Ca"/>
    <Product specieID="RyR_4O"/>
    <forwardRate>0.0001</forwardRate>
    <reverseRate>0.0625</reverseRate>
  </Reaction>
  
  <Reaction name="RyRbCa11" id="RyRbCa11">
    <Reactant specieID="RyR_3O_2Ca"/>
    <Product specieID="RyR_4O"/>
    <forwardRate>0.1</forwardRate>
    <reverseRate>0.5</reverseRate>
  </Reaction>

  <Reaction name="RyRbCa12" id="RyRbCa12">
    <Reactant specieID="RyR_4O"/>
    <Product specieID="RyR_C2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.5</reverseRate>
  </Reaction>


 <Reaction name="RyRbCaM1" id="RyRbCaM1">
    <Reactant specieID="RyR"/>
    <Reactant specieID="CaM" power="4"/>
    <Product specieID="RyRCaM"/>
    <forwardRate>1.75e-09</forwardRate> <!--10.1161/circresaha.114.302857 20 nM-->
    <reverseRate>1.5e-05</reverseRate>
 </Reaction>

 
 <Reaction name="RyRbCaM2" id="RyRbCaM2">
    <Reactant specieID="RyR_2Ca"/>
    <Reactant specieID="CaM" power="4"/>
    <Product specieID="RyRCaM_2Ca"/>
    <forwardRate>3e-10</forwardRate> <!--10.1161/circresaha.114.302857 20 nM-->
    <reverseRate>1.5e-05</reverseRate>
 </Reaction>

 <Reaction name="RyRbCaM3" id="RyRbCaM3">
    <Reactant specieID="RyR_4Ca"/>
    <Reactant specieID="CaM" power="4"/>
    <Product specieID="RyRCaM_4Ca"/>
    <forwardRate>3e-10</forwardRate> <!--10.1161/circresaha.114.302857 20 nM-->
    <reverseRate>1.5e-05</reverseRate>
 </Reaction>
 <Reaction name="RyRbCaM4" id="RyRbCaM4">
    <Reactant specieID="RyR_6Ca"/>
    <Reactant specieID="CaM" power="4"/>
    <Product specieID="RyRCaM_6Ca"/>
    <forwardRate>3e-10</forwardRate> <!--10.1161/circresaha.114.302857 20 nM-->
    <reverseRate>1.5e-05</reverseRate>
 </Reaction>
 <Reaction name="RyRbCaM5" id="RyRbCaM5">
    <Reactant specieID="RyR_8Ca"/>
    <Reactant specieID="CaM" power="4"/>
    <Product specieID="RyRCaM_8Ca"/>
    <forwardRate>3e-10</forwardRate> <!--10.1161/circresaha.114.302857 20 nM-->
    <reverseRate>1.5e-05</reverseRate>
 </Reaction>


 <Reaction name="RyRbCaM6" id="RyRbCaM6">
    <Reactant specieID="RyR_3O"/>
    <Reactant specieID="CaM" power="4"/>
    <Product specieID="RyRCaM_3O"/>
    <forwardRate>3e-10</forwardRate> <!--10.1161/circresaha.114.302857 20 nM-->
    <reverseRate>1.5e-05</reverseRate>
 </Reaction>
 
 <Reaction name="RyRbCaM7" id="RyRbCaM7">
    <Reactant specieID="RyR_4O"/>
    <Reactant specieID="CaM" power="4"/>
    <Product specieID="RyRCaM_C2"/>
    <forwardRate>3e-10</forwardRate> <!--10.1161/circresaha.114.302857 20 nM-->
    <reverseRate>0.75e-05</reverseRate>
 </Reaction>

 <Reaction name="RyRbCaM8" id="RyRbCaM8">
    <Reactant specieID="RyR_3O_2Ca"/>
    <Reactant specieID="CaM" power="4"/>
    <Product specieID="RyRCaM_3O_2Ca"/>
    <forwardRate>3e-10</forwardRate>
    <!--10.1161/circresaha.114.302857 20 nM-->
    <reverseRate>1.5e-05</reverseRate>
 </Reaction>
 
<Reaction name="RyRbCaM9" id="RyRbCaM9">
    <Reactant specieID="RyR_2O_2Ca"/>
    <Reactant specieID="CaM" power="4"/>
    <Product specieID="RyRCaM_2O_2Ca"/>
    <forwardRate>3e-10</forwardRate>
    <!--10.1161/circresaha.114.302857 20 nM-->
    <reverseRate>7e-05</reverseRate>
</Reaction>

<Reaction name="RyRbCaM10" id="RyRbCaM10">
    <Reactant specieID="RyR_2O_4Ca"/>
    <Reactant specieID="CaM" power="4"/>
    <Product specieID="RyRCaM_2O_4Ca"/>
    <forwardRate>3e-10</forwardRate> <!--10.1161/circresaha.114.302857 20 nM-->
    <reverseRate>1.5e-05</reverseRate>
</Reaction>
<Reaction name="RyRbCaM11" id="RyRbCaM11">
    <Reactant specieID="RyR_2O"/>
    <Reactant specieID="CaM" power="4"/>
    <Product specieID="RyRCaM_2O"/>
    <forwardRate>3e-10</forwardRate> <!--10.1161/circresaha.114.302857 20 nM-->
    <reverseRate>1.5e-05</reverseRate>
</Reaction>
<Reaction name="RyRbCaM12" id="RyRbCaM12">
    <Reactant specieID="RyR_C2"/>
    <Reactant specieID="CaM" power="4"/>
    <Product specieID="RyRCaM_C2"/>
    <forwardRate>3e-10</forwardRate> <!--10.1161/circresaha.114.302857 20 nM-->
    <reverseRate>1.5e-05</reverseRate>
 </Reaction>

   <Reaction name="RyRCaM4" id="RyRCaM4">
    <Reactant specieID="RyRCaM"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyRCaM_2Ca"/>
    <forwardRate>1.2e-07</forwardRate>
    <reverseRate>0.025</reverseRate>
  </Reaction>
  <Reaction name="RyRCaMCaM5" id="RyRCaMCaM5">
    <Reactant specieID="RyRCaM_2Ca"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyRCaM_4Ca"/>
    <forwardRate>1.2e-07</forwardRate>
    <reverseRate>0.025</reverseRate>
  </Reaction>
  <Reaction name="RyRCaMCaM6" id="RyRCaMCaM6">
    <Reactant specieID="RyRCaM_4Ca"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyRCaM_6Ca"/>
    <forwardRate>1.2e-07</forwardRate>
    <reverseRate>0.025</reverseRate>
  </Reaction>
  <Reaction name="RyRCaMCaM7" id="RyRCaMCaM7">
    <Reactant specieID="RyRCaM_6Ca"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyRCaM_8Ca"/>
    <forwardRate>1.2e-07</forwardRate>
    <reverseRate>0.025</reverseRate>
  </Reaction>

  <Reaction name="RyRCaMCaM8" id="RyRCaMCaM8">
    <Reactant specieID="RyRCaM_3O"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyRCaM_3O_2Ca"/>
    <forwardRate>1.2e-07</forwardRate>
    <reverseRate>0.025</reverseRate>
   </Reaction>             

  <Reaction name="RyRCaMCaM1" id="RyRCaMCaM1">
    <Reactant specieID="RyRCaM_4Ca"/>
    <Product specieID="RyRCaM_2O"/>
    <forwardRate>0.01</forwardRate>
    <reverseRate>0.25</reverseRate>
  </Reaction>

  <Reaction name="RyRCaMCaM2" id="RyRCaMCaM8">
    <Reactant specieID="RyRCaM_2O"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyRCaM_2O_2Ca"/>
    <forwardRate>1.2e-07</forwardRate>
    <reverseRate>0.025</reverseRate>
   </Reaction>    

   <Reaction name="RyRCaMCaM14" id="RyRCaMCaM14">
    <Reactant specieID="RyRCaM_2O_2Ca"/>
    <Product specieID="RyRCaM_3O"/>
    <forwardRate>0.1</forwardRate>
    <reverseRate>0.5</reverseRate>
  </Reaction>

  <Reaction name="RyRCaMCaM15" id="RyRCaMCaM15">
    <Reactant specieID="RyRCaM_2O_4Ca"/>
    <Product specieID="RyRCaM_3O_2Ca"/>
    <forwardRate>0.1</forwardRate>
    <reverseRate>0.5</reverseRate>
  </Reaction>

  
   <Reaction name="RyRCaMCaM3" id="RyRCaMCaM3">
    <Reactant specieID="RyRCaM_2O_2Ca"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyRCaM_2O_4Ca"/>
    <forwardRate>1.2e-07</forwardRate>
    <reverseRate>0.025</reverseRate>
   </Reaction>    

   
  <Reaction name="RyRCaMCaM9" id="RyRCaMCaM9">
    <Reactant specieID="RyRCaM_6Ca"/>
    <Product specieID="RyRCaM_3O"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>0.125</reverseRate>
  </Reaction>

  <Reaction name="RyRCaMCaM10" id="RyRCaMCaM10">
    <Reactant specieID="RyRCaM_8Ca"/>
    <Product specieID="RyRCaM_C2"/>
    <forwardRate>0.0002</forwardRate>
    <reverseRate>0.0625</reverseRate>
  </Reaction>
  
  <Reaction name="RyRCaMCaM11" id="RyRCaMCaM11">
    <Reactant specieID="RyRCaM_3O_2Ca"/>
    <Product specieID="RyRCaM_C2"/>
    <forwardRate>0.2</forwardRate>
    <reverseRate>0.5</reverseRate>
  </Reaction>


</ReactionScheme>
