<ReactionScheme>
  <Specie name="Ca" id="Ca" kdiff="100" kdiffunit="mu2/s"/>
<Specie name="CaER" id="CaER" kdiff="10." kdiffunit="mu2/s"/>
  <Specie name="RyR" id="RyR" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyRC1" id="RyRC1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyRC2" id="RyRC2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyRC3" id="RyRC3" kdiff="0" kdiffunit="mu2/s"/>  
  <Specie name="RyRO1" id="RyRO1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyRO2" id="RyRO2" kdiff="0" kdiffunit="mu2/s"/>
<Reaction name="RyRe" id="RyRe">
    <Reactant specieID="RyR"/>
    <Reactant specieID="Ca" power="4"/>
    <Product specieID="RyRC1"/>
    <forwardRate>5e-11</forwardRate>
    <reverseRate>50e-3</reverseRate>
 </Reaction>

  <Reaction name="RyRa" id="RyRa">
    <Reactant specieID="RyRC1"/>
    <Reactant specieID="Ca" power="4"/>
    <Product specieID="RyRO1"/>
    <forwardRate>5e-10</forwardRate>
    <reverseRate>9600e-3</reverseRate>
 </Reaction>
   

  <Reaction name="RyRb" id="RyRb">
    <Reactant specieID="RyRO1"/>
    <Reactant specieID="Ca" power="4"/>
    <Product specieID="RyRO2"/>
    <forwardRate>5e-11</forwardRate>
    <reverseRate>13</reverseRate>
  </Reaction>

   <Reaction name="RyRc" id="RyRc">
    <Reactant specieID="RyRC2"/>
    <Reactant specieID="Ca" power="4"/>
    <Product specieID="RyRO2"/>
    <forwardRate>3.3333e-15</forwardRate>
    <reverseRate>66.667e-3</reverseRate>
  </Reaction>

  <Reaction name="RyRd" id="RyRd">
    <Reactant specieID="RyRC1"/>
    <Reactant specieID="Ca" power="4"/>
    <Product specieID="RyRC2"/>
    <forwardRate>5000e-15</forwardRate>
    <reverseRate>1.235e-3</reverseRate>
  </Reaction>

  <Reaction name="RyRf" id="RyRf">
    <Reactant specieID="RyRC2"/>
    <Reactant specieID="Ca" power="4"/>
    <Product specieID="RyRC3"/>
    <forwardRate>1e-14</forwardRate>
    <reverseRate>3</reverseRate>
 </Reaction>
  <Reaction name="RyRflux1" id="RyRflux1">
     <Reactant specieID="RyRO1"/>
     <Reactant specieID="CaER"/>
     <Product specieID="RyRO1"/>
     <Product specieID="Ca"/>
    <forwardRate>5e-3</forwardRate>
    <reverseRate>5e-3</reverseRate>
  </Reaction>
  <Reaction name="RyRflux2" id="RyRflux2">
     <Reactant specieID="RyRO2"/>
     <Reactant specieID="CaER"/>
     <Product specieID="RyRO2"/>
     <Product specieID="Ca"/>
    <forwardRate>5e-3</forwardRate>
    <reverseRate>5e-3</reverseRate>
  </Reaction>
    
<Specie name="Cyt_SERCA" id="Cyt_SERCA" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Cyt_SERCA_Ca" id="Cyt_SERCA_Ca" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Cyt_SERCA_Ca2" id="Cyt_SERCA_Ca2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="LeakER" id="LeakER" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CRT" id="CRT" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CRTP" id="CRTP" kdiff="0" kdiffunit="mu2/s"/>
     
  <Reaction name="Cyt_SERCA_1a" id="Cyt_SERCA_1a">
    <Reactant specieID="Ca"/>
    <Reactant specieID="Cyt_SERCA"/>
    <Product specieID="Cyt_SERCA_Ca"/>
    
    <forwardRate>17147e-7</forwardRate>
    <reverseRate>8426.3e-4</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
 
  <Reaction name="Cyt_SERCA_1b" id="Cyt_SERCA_1b">
    <Reactant specieID="Ca"/>
    <Reactant specieID="Cyt_SERCA_Ca"/>
    <Product specieID="Cyt_SERCA_Ca2"/>
        
    <forwardRate>17147e-7</forwardRate>
    <reverseRate>8426.3e-4</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
<Reaction name="Cyt_SERCA_1d" id="Cyt_SERCA_1d">
    <Reactant specieID="Cyt_SERCA_Ca2"/>
    <Product specieID="CaER" power="2"/>
    <Product specieID="Cyt_SERCA"/>
    <forwardRate>50e-3</forwardRate>
    <Q10>0.2</Q10>
  </Reaction>


  <Reaction name="CRTP_bind" id="CRTP_bind">
    <Reactant specieID="CRT"/>
    <Reactant specieID="CaER"/>
    <Product specieID="CRTP"/>
    
    <forwardRate>1e-5</forwardRate>
    <reverseRate>0.1</reverseRate>
  </Reaction>

  <Reaction name="Ca_leakER1" id="Ca_leakaER1">
    <Reactant specieID="CaER"/>
    <Reactant specieID="LeakER"/>
    <Product specieID="LeakER"/>
    <Product specieID="Ca"/>

    <forwardRate>1.8e-7</forwardRate>
    <reverseRate>1.8e-7</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
<Specie name="Fura2" id="Fura2" kdiff="83" kdiffunit="mu2/s"/>
  <Specie name="Fura2Ca" id="Fura2Ca" kdiff="83" kdiffunit="mu2/s"/>
  <Reaction name="Fura2_r" id="Fura2_r">
    <Reactant specieID="Ca"/>
    <Reactant specieID="Fura2"/>
    <Product specieID="Fura2Ca"/>

    <forwardRate>1e-3</forwardRate>
    <reverseRate>185e-3</reverseRate>
  </Reaction>


 <Specie name="RyRCaM"            id="RyRCaM"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyRCaMC1"            id="RyRCaMC1"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyRCaMC2"            id="RyRCaMC2"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyRCaMC3"            id="RyRCaMC3"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyRCaMC4"            id="RyRCaMC4"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyRCaMC5"            id="RyRCaMC5"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyRCaMO1"            id="RyRCaMO1"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyRCaMO2"            id="RyRCaMO2"           kdiff="0" kdiffunit="mu2/s"/>
   <Reaction name = "RyRCaMe" id="RyRCaMe">
    <Reactant specieID="RyRCaM"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyRCaMC1"/>
    <forwardRate>5e-06</forwardRate> <!-- 2 Ca to 2 subunits-->
    <reverseRate>100e-3</reverseRate>
 </Reaction>

  <Reaction name = "RyRCaMa" id="RyRCaMa"> 
    <Reactant specieID="RyRCaMC1"/>
    <Reactant specieID="Ca" power="2"/> <!-- 2 Ca to 2 subunits Fully bound?-->
    <Product specieID="RyRCaMO1"/>
    <forwardRate>5e-10</forwardRate>
    <reverseRate>9600e-3</reverseRate>
 </Reaction>
   

  <Reaction name = "RyRCaMb" id="RyRCaMb">
    <Reactant specieID="RyRCaMO1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyRCaMO2" />
    <forwardRate>7e-6</forwardRate>
    <reverseRate>1.3</reverseRate>
  </Reaction>

   <Reaction name = "RyRCaMc" id="RyRCaMc">
    <Reactant specieID="RyRCaMC2"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyRCaMO2" />
    <forwardRate>0.75e-6</forwardRate>
    <reverseRate>66.667e-1</reverseRate>
  </Reaction>

  <Reaction name = "RyRCaMd" id="RyRCaMd">
    <Reactant specieID="RyRCaMC1"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyRCaMC2" />
    <forwardRate>8e-7</forwardRate>
    <reverseRate>1.235e-2</reverseRate>
  </Reaction>

  <Reaction name = "RyRCaMf" id="RyRCaMf">
    <Reactant specieID="RyRCaMC2"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyRCaMC3"/>
    <forwardRate>0.865e-7</forwardRate>
    <reverseRate>3</reverseRate>
  </Reaction>

  <Reaction name = "RyRCaMg" id="RyRCaMg">
    <Reactant specieID="RyRCaMO1"/>
    <Product specieID="RyRCaMC4"/>
    <forwardRate>4e-4</forwardRate>
    <reverseRate>1e-4</reverseRate>
  </Reaction>
   <Reaction name = "RyRCaMh" id="RyRCaMh">
    <Reactant specieID="RyRCaMO2"/>
    <Product specieID="RyRCaMC5"/>
    <forwardRate>2e-4</forwardRate>
    <reverseRate>1e-4</reverseRate>
  </Reaction>
 
  <!--Sobie et al. 2002 (Saleet Jafri's) states 4/ms, Keizer and Levine 5/ms for small ER-->
 
   <Reaction name = "RyRCaMflux1" id="RyRCaMflux1">
     <Reactant specieID="RyRCaMO1"/>
     <Reactant specieID="CaER"/>
     <Product specieID="RyRCaMO1"/>
     <Product specieID="Ca"/>
    <forwardRate>5e-3</forwardRate>
    <reverseRate>5e-3</reverseRate>
  </Reaction>
  <Reaction name = "RyRCaMflux2" id="RyRCaMflux2">
     <Reactant specieID="RyRCaMO2"/>
     <Reactant specieID="CaER"/>
     <Product specieID="RyRCaMO2"/>
     <Product specieID="Ca"/>
    <forwardRate>5e-3</forwardRate>
    <reverseRate>5e-3</reverseRate>
  </Reaction>    
</ReactionScheme>
