<ReactionScheme><Specie name="Ca" id="Ca" kdiff="100" kdiffunit="mu2/s"/>
  <Specie name="CaOut" id="CaOut" kdiff="10" kdiffunit="mu2/s"/>
  <Specie name="CaOutLeak" id="CaOutLeak" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Leak" id="Leak" kdiff="0" kdiffunit="mu2/s"/>

  <Specie name="fixedbuffer" id="fixedbuffer" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="fixedbufferCa" id="fixedbufferCa" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Calbin" id="Calbin" kdiff="9.3" kdiffunit="mu2/s"/>
  <Specie name="CalbinC" id="CalbinC" kdiff="9.3" kdiffunit="mu2/s"/>
  
  <Specie name="pmca" id="pmca" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="ncx" id="ncx" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="pmcaCa" id="pmcaCa" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="ncxCa" id="ncxCa" kdiff="0" kdiffunit="mu2/s"/>
 
  <Specie name="Ng" id="Ng" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="NgCaM" id="NgCaM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaM" id="CaM" kdiff="4" kdiffunit="mu2/s"/>
  <Specie name="CaMCa2C" id="CaMCa2C" kdiff="4" kdiffunit="mu2/s"/>
  <Specie name="CaMCa2N" id="CaMCa2N" kdiff="4" kdiffunit="mu2/s"/>
  <Specie name="CaMCa4" id="CaMCa4" kdiff="4" kdiffunit="mu2/s"/>
  <Reaction name="Ca_pump1a" id="Ca_pump1a">
    <Reactant specieID="Ca"/>
    <Reactant specieID="pmca"/>
    <Product specieID="pmcaCa"/>

    <forwardRate>0.5e-4</forwardRate>
    <reverseRate>0.007</reverseRate>
  </Reaction>

  <Reaction name="Ca_pump1b" id="Ca_pump1b">
    <Reactant specieID="pmcaCa"/>
    <Product specieID="pmca"/>
    <Product specieID="CaOut"/>
    
    <forwardRate>0.0028</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>

  <Reaction name="Ca_pump2a" id="Ca_pump2a">
    <Reactant specieID="Ca"/>
    <Reactant specieID="ncx"/>
    <Product specieID="ncxCa"/>
    
    <forwardRate>1.68e-5</forwardRate>
    <reverseRate>0.0112</reverseRate>
  </Reaction>
  
  <Reaction name="Ca_pump2b" id="Ca_pump2b">
    <Reactant specieID="ncxCa"/>
    <Product specieID="ncx"/>
    <Product specieID="CaOut"/>

    <forwardRate>0.0056</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>
  <Reaction name="Ca_leak1" id="Ca_leak1">
    <Reactant specieID="CaOut"/>
    <Reactant specieID="Leak"/>
    <Product specieID="CaOutLeak"/>

    <forwardRate>1.5e-6</forwardRate>
    <reverseRate>1.1e-3</reverseRate>
  </Reaction>

  <Reaction name="Ca_leak2" id="Ca_leak2">
    <Reactant specieID="CaOutLeak"/>
    <Product specieID="Ca"/>
    <Product specieID="Leak"/>
    
    <forwardRate>1.1e-3</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>


  
  <Reaction name="Ca_buffer" id="Ca_Buffer">
    <Reactant specieID="Ca"/>
    <Reactant specieID="Calbin"/>
    <Product specieID="CalbinC"/>

    <forwardRate>2.8e-5</forwardRate>
    <reverseRate>0.0196</reverseRate>
  </Reaction>
  <Reaction name="Ca_fixedbuffer" id="Ca_fixedBuffer">
    <Reactant specieID="Ca"/>
    <Reactant specieID="fixedbuffer"/>
    <Product specieID="fixedbufferCa"/>
    <forwardRate>0.004e-3</forwardRate>
    <reverseRate>20.0e-2</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
  
  <Reaction name="CaMC_bind" id="CaMC_bind">
    <Reactant specieID="CaM"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="CaMCa2C"/>
    <forwardRate>6e-6</forwardRate>
    <reverseRate>9.1e-3</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
  <Reaction name="CaMCa2C_bind" id="CaMCa2C_bind">
    <Reactant specieID="CaMCa2C"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="CaMCa4"/>
    <forwardRate>0.1e-3</forwardRate>
    <reverseRate>1000e-3</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
  <Reaction name="CaMN_bind" id="CaMN_bind">
    <Reactant specieID="CaM"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="CaMCa2N"/>
    
    <forwardRate>0.1e-3</forwardRate>
    <reverseRate>1000e-3</reverseRate>
    
  </Reaction>

  <Reaction name="CaMCa2N_bind" id="CaMCa2N_bind">
    <Reactant specieID="CaMCa2N"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="CaMCa4"/>
    
    <forwardRate>6e-6</forwardRate>
    <reverseRate>9.1e-3</reverseRate>
    
  </Reaction>

  <Reaction name="NgCaM_bind" id="NgCaM_bind">
    <Reactant specieID="CaM"/>
    <Reactant specieID="Ng"/>
    <Product specieID="NgCaM"/>
    <forwardRate>28.e-6</forwardRate>
    <reverseRate>36.e-3</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>

</ReactionScheme>
